--Rx.aadl

package Rx
public
with PACE_data, BLESS_Types, BLESS;


flag renames data BLESS_Types::flag;
ms renames data PACE_data::ms;
milliG renames data PACE_data::milliG;
ResponseFactor renames data PACE_data::ResponseFactor;
CCcount renames data PACE_data::CCcount; 

--  thread Settings receives the patient prescription from telemetry
--  and then providing each value of the Rx individually

--  this thread has not been implemented because much would involve
--  the Rx in the format native to telemetry

thread Settings
  features
  settings : in event data port PACE_data::Rx;  -- Rx settings from telemetry
  --values in Rx
  lrl: out data port ms  --lower rate limit interval 
    {BLESS::Value=>"<<returns quantity ms :=LRL>>";};
  url: out data port ms  --upper rate limit interval 
    {BLESS::Value=>"<<returns quantity ms :=URL>>";};
  av: out data port ms  --AV delay (fixed)
    {BLESS::Value=>"<<returns quantity ms :=AV>>";};
  savo: out data port ms   --sensed AV delay offset
    {BLESS::Value=>"<<returns quantity ms :=SAVO>>";};
  act: out data port milliG  --activity threshold 
    {BLESS::Value=>"<<returns quantity milliG :=ACTIVITY_THRESHOLD>>";};
  vrp: out data port ms  --ventricular refractory period
    {BLESS::Value=>"<<returns quantity ms :=VRP>>";};
  arp: out data port ms  --atrial refractory period
    {BLESS::Value=>"<<returns quantity ms :=ARP>>";};
  pvarp: out data port ms  --post-ventricular atrial refractory period
    {BLESS::Value=>"<<returns quantity ms :=PVARP>>";};
  --pacing mode
  pv: out data port flag  --pace ventricle
    {BLESS::Value=>"<<returns boolean :=PV>>";};
  sv: out data port flag  --sense ventricle
    {BLESS::Value=>"<<returns boolean :=SV>>";};
  pa: out data port flag  --pace atrium
    {BLESS::Value=>"<<returns boolean :=PA>>";};
  sa: out data port flag  --sense atrium
    {BLESS::Value=>"<<returns boolean :=SA>>";};
  inhibit: out data port flag -- inhibit mode:  senses inhibit paces
    {BLESS::Value=>"<<returns boolean :=INHIBIT>>";};
  track: out data port flag  --tracking mode:  atrial paces follow vetricular sense or pace
    {BLESS::Value=>"<<returns boolean :=TRACK>>";};
  --rate modifiers
  hy: out data port ms  --hysteresis delay, added to l when PVC
    {BLESS::Value=>"<<returns quantity ms :=HY>>";};
  rr: out data port flag  --rate responsive
    {BLESS::Assertion=>"<<RR>>";};  
  rf: out data port ResponseFactor  --response factor
    {BLESS::Value=>"<<returns quantity rf :=RESPONSE_FACTOR>>";};  
  msr: out data port ms  --maximum sensor rate interval
    {BLESS::Value=>"<<returns quantity ms :=MSR>>";};  
  min_av: out data port ms  --minimum dynamic AV delay
    {BLESS::Value=>"<<returns quantity ms :=MIN_AV>>";};
  ex_pvarp: out data port ms  --extended post-ventricular atrial refractory period
    {BLESS::Value=>"<<returns quantity ms :=EX_PVARP>>";};
  rt: out data port ms   --reaction time
    {BLESS::Value=>"<<returns quantity ms :=REACTION_TIME>>";}; 
  at: out data port milliG  --activity threshold
    {BLESS::Value=>"<<returns quantity milliG :=ACTIVITY_THRESHOLD>>";};  
  ct: out data port ms  --recovery time
    {BLESS::Value=>"<<returns quantity ms :=RECOVERY_TIME>>";};  
  --atrial tachycardia response
  atr_enable : out data port flag  --is ATR prescribed?
    {BLESS::Value=>"<<returns boolean :=ATR_ENABLE>>";};
  atr_duration : out data port CCcount  --number of cci in duration before fallback
    {BLESS::Value=>"<<returns quantity whole :=ATR_DURATION>>";};
  
  fb_time : out data port BLESS_Types::Time  --time to fall back from URL to LRL
    {BLESS::Value=>"<<returns time :=FBT>>";};
  --rate smoothing
  drs: out data port PACE_data::percent  --down-rate smoothing
    {BLESS::Value=>"<<returns quantity percent :=DRS>>";};
  urs: out data port PACE_data::percent  --up-rate smoothing  
    {BLESS::Value=>"<<returns quantity percent :=URS>>";};
end Settings;

thread implementation Settings.imp
  annex BLESS {** 
    states init : initial state
    **};
end Settings.imp;
 

end Rx;